OpenViBE-Scenario
Comment
  Overview

  This scenario is used as a first
  step to collect some training data. Those
  data will later be used to train a classifier.

  When you start this scenario, just wait 33
  seconds before it starts the instruction sequence.

  You will then be presented with open and close images. When
  the open hand appears, imagine opening hand movement
  and when the closing hand appears imagine closing hand movements.
  There will be 20 images of each side.

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
Motor Imagery BCI Stimulator => #1
  Lua Script = C:/Users/nme20/OneDrive/Escritorio/TFG/tfg_hand_open_closing/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 20
  First Class = OVTK_StimulationId_Label_01
  Second Class = OVTK_StimulationId_Label_02
  Baseline Duration (in sec) = 1
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 1.250
  Feedback Duration (in sec) = 3.750
  End of Trial Minimum Duration (in sec) = 1.500
  End of Trial Maximum Duration (in sec) = 3.500
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal stream, Input stream 3=#1 -> Identity => #2
#2.Output stream 3 -> Display cue image
  Display images in full screen = false
  Clear screen Stimulation = OVTK_StimulationId_VisualStimulationStop
  Cue Image 1 = C:/Users/nme20/OneDrive/Escritorio/TFG/tfg_hand_open_closing/close.png
  Stimulation 1 = OVTK_StimulationId_Label_01
  Cue Image 2 = C:/Users/nme20/OneDrive/Escritorio/TFG/tfg_hand_open_closing/open.png
  Stimulation 2 = OVTK_StimulationId_Label_02
  Cue Image 3 = C:/Users/nme20/OneDrive/Escritorio/TFG/tfg_hand_open_closing/scene-graz-cross/cross.png
  Stimulation 3 = OVTK_GDF_Cross_On_Screen
Input stream 1=#2.Output stream 1, Input stream 2=#2.Output stream 2, Input stream 3=#2.Output stream 3 -> Generic stream writer
  Filename = C:/Users/nme20/OneDrive/Escritorio/TFG/tfg_hand_open_closing/recorded-files/motor-imagery-csp-1-acquisition-[$core{date}-$core{time}].ov
  Use compression = false
#2.Output stream 3 -> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
