OpenViBE-Scenario
Comment
  The CSP spatial filter produced in the previous
  scenario is used prior to the feature extraction.
Comment
  Overview

  This scenario can be used online once the
  CSP spatial filter and the classifier is trained.

  note: the recorded files go to the
  folder where the scenario xml is located
  (${Player_ScenarioDirectory}/).
Comment
  Then comes the feature extraction part.

  The signal is filtered in a large mu/beta [8 30] Hz range.
  The filtered signal is then splitted in blocks of 1 second
  every 16th second and the logarithmic band power is
  computed thanks to the two Simple DSP and
  the Signal Average boxes.

  The matrices can then be converted in feature vectors.

  note: depending on what frequency range
  reacts best for the subject, you may have to tune
  this part of the scenario

  note: whatever change you do on this
  scenario, don't forget to do the same on the
  classifier trainer scenario

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Temporal filter => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
Motor Imagery BCI Stimulator => #2
  Lua Script = C:/Users/nme20/OneDrive/Escritorio/TFG/tfg_hand_open_closing/motor-imagery-bci-graz-stimulator.lua
  Number of Trials for Each Class = 20
  First Class = OVTK_StimulationId_Label_01
  Second Class = OVTK_StimulationId_Label_02
  Baseline Duration (in sec) = 10
  Wait For Beep Duration (in sec) = 2
  Wait For Cue Duration (in sec) = 1
  Display Cue Duration (in sec) = 1.250
  Feedback Duration (in sec) = 3.750
  End of Trial Minimum Duration (in sec) = 1.500
  End of Trial Maximum Duration (in sec) = 3.500
Input stream 1=#0.Experiment information, Input stream 2=#0.Signal stream, Input stream 3=#2 -> Generic stream writer
  Filename = C:/Users/nme20/OneDrive/Escritorio/TFG/tfg_hand_open_closing/recorded-files/motor-imagery-csp-4-online-[$core{date}-$core{time}].ov
  Use compression = false
Input stream 1=#1, Input stream 2=#2 -> Identity => #4
#4.Output stream 1 -> CSP Spatial Filter
  Spatial Filter Coefficients = 3.163492e-003 -2.577944e-003 1.720044e-003 -1.511192e-003 1.088840e-002 6.256412e-003 -2.026045e-005 8.730309e-005 -3.970195e-003 7.073375e-001 -4.107379e-003 -1.319472e-003 -8.278928e-004 3.573370e-003 3.090715e-003 -2.044775e-003 -6.206178e-006 -2.880456e-002 1.481553e-003 -9.553049e-004 3.988078e-004 -6.182492e-004 1.544476e-002 -7.059466e-001 -3.281118e-003 1.948861e-002 3.143832e-002 -2.128251e-003 1.891357e-001 3.763966e-001 -1.695393e-003 2.992127e-003 -3.858501e-002 -3.880537e-001 -3.007328e-002 -1.396661e-001 2.642953e-002 1.698188e-001 -1.298828e-002 -1.248881e-001 -1.703712e-004 -5.750504e-001 1.134215e-001 -2.592770e-002 -6.467049e-002 -3.087862e-002 3.509807e-003 5.039862e-001 2.457611e-002 -3.776608e-002 -1.708929e-002 8.167328e-003 1.997017e-001 -1.936205e-002 -8.555987e-005 2.711504e-004 1.124974e-001 -2.281220e-001 -1.448872e-001 2.192433e-001 6.476422e-002 -1.113303e-001 -6.941238e-002 1.511876e-001 -6.484292e-005 -7.038483e-001 3.882022e-002 5.516173e-003 -5.373726e-002 -1.016897e-002 5.267962e-001 4.347615e-002 -1.926062e-002 -3.023496e-002 -3.204662e-002 -3.212789e-002 -3.501646e-002 1.215729e-001 -2.296566e-003 -4.362067e-001 -4.600357e-002 -8.654724e-002 1.911621e-002 -2.906101e-003 -9.601182e-003 -7.609708e-003 1.208975e-002 1.290903e-001 3.682741e-005 -6.197205e-001 3.513758e-001 4.417621e-004 2.487255e-003 6.291801e-002 4.613021e-001 1.978478e-001 -5.228342e-002 -2.184654e-001 -5.944921e-002 -3.736018e-002 4.576623e-002 8.450052e-002 -8.488232e-004 -8.239205e-002 -4.869090e-002 2.383497e-001 6.783809e-003 7.769775e-003 3.710188e-004 1.785630e-002 1.627727e-002 -2.082331e-002 -4.200423e-006 -4.887520e-001 -2.702470e-001 -7.221139e-003 -2.041984e-002 4.010769e-001 6.154159e-001 -1.276692e-001 -6.536272e-001 5.630253e-001 1.921940e-003 -2.108716e-002 -8.109705e-003 -1.109251e-002 2.445493e-004 -6.374297e-004 -5.568635e-003 -1.253489e-002 2.006823e-001 -3.077810e-002 2.125131e-002 -3.097917e-002 -2.662209e-002 1.742033e-002 3.337585e-005 -3.354820e-001 8.443339e-003 7.764005e-003 -6.738519e-003 3.396875e-004 3.138936e-001 7.040539e-003
  Number of Output Channels = 6
  Number of Input Channels = 24
  Filter matrix file =
  0x8d21ff41 = C:/Users/nme20/OneDrive/Escritorio/TFG/tfg_hand_open_closing/csp-spatial-filter.cfg
-> Time based epoching
  Epoch 1 duration (in sec) = 1.000000
  Epoch 1 intervals (in sec) = 0.062500
-> Simple DSP
  Equation = x*x
-> Signal average
-> Simple DSP
  Equation = log(1+x)
-> Feature aggregator
-> Classifier processor => #11
  Filename to load configuration from = C:/Users/nme20/OneDrive/Escritorio/TFG/tfg_hand_open_closing/motor-imagery-bci-config-classifier.cfg
#11.Hyperplane distance -> Matrix Transpose => #12
Input signal=#12, Input stimulations=#11.Labels -> LSL Export (Gipsa)
  Stream name = type
  Stream type = EEG
#2 -> Display cue image
  Display images in full screen = false
  Clear screen Stimulation = OVTK_StimulationId_VisualStimulationStop
  Cue Image 1 = C:/Users/nme20/OneDrive/Escritorio/TFG/tfg_hand_open_closing/close.png
  Stimulation 1 = OVTK_StimulationId_Label_01
  Cue Image 2 = C:/Users/nme20/OneDrive/Escritorio/TFG/tfg_hand_open_closing/open.png
  Stimulation 2 = OVTK_StimulationId_Label_02
  Cue Image 3 = C:/Users/nme20/OneDrive/Escritorio/TFG/tfg_hand_open_closing/scene-graz-cross/cross.png
  Stimulation 3 = OVTK_GDF_Cross_On_Screen
