OpenViBE-Scenario
Comment
  Overview

  This scenario trains the Common Spatial Pattern spatial filter
  that will be used in the further steps.

  The EEG signal is filtered in a large frequency band [8-30 Hz].

  Then the Stimulation based epoching boxes
  provide examples for the CSP Spatial Filter Trainer :
  class 1: CLOSE trials
  class 2: OPEN trials

  At the end of the training process,
  the CSP trainer outputs the stimulation
  OVTK_StimulationId_TrainCompleted on success,
  telling the Player Controller to pause the scenario.

0xc67a01dc Generic stream reader => #0
  Filename = C:/Users/nme20/OneDrive/Escritorio/TFG/tfg_hand_open_closing/recorded-files/motor-imagery-csp-1-acquisition-[2024.06.29-17.56.37].ov
#0.Output stream 2 -> Temporal filter => #1
  Filter method = Butterworth
  Filter type = Band pass
  Filter order = 5
  Low cut frequency (Hz) = 8
  High cut frequency (Hz) = 30
  Pass band ripple (dB) = 1
Input stream 1=#1, Input stream 2=#0.Output stream 3 -> Identity => #2
Input signal=#2.Output stream 1, Input stimulations=#2.Output stream 2 -> Stimulation based epoching "Closing hand" => #3
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_StimulationId_Label_01
Input signal=#2.Output stream 1, Input stimulations=#2.Output stream 2 -> Stimulation based epoching "Opening hand" => #4
  Epoch duration (in sec) = 4
  Epoch offset (in sec) = 0.5
  Stimulation to epoch from = OVTK_StimulationId_Label_02
Stimulations=#2.Output stream 2, Signal condition 1=#3.Epoched signal, Signal condition 2=#4.Epoched signal -> CSP Spatial Filter Trainer
  Train Trigger = OVTK_StimulationId_Train
  Spatial filter configuration = C:/Users/nme20/OneDrive/Escritorio/TFG/tfg_hand_open_closing/csp-spatial-filter.cfg
  Filter dimension = 6
  Save as box config = true
-> Player Controller
  Stimulation name = OVTK_StimulationId_TrainCompleted
  Action to perform = Stop
